PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': 'test'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['paths.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  backgroundFit = fill
  backgroundImg = abstract-art-3840x2160-23159.jpg
  expName = grouping-vwm-task
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine VWM_memory_display
    RoutineSettingsComponent VWM_memory_display
      backgroundImg = abstract-art-3840x2160-23159.jpg
      useWindowParams = True
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    CodeComponent memory_sequence_code
      Code Type = Py
      Before Experiment:
        import random

        random.seed = 1

        max_eccen = 0.4

        def get_random_path_coord( coords_to_avoid ):
            # Select random x and y values that are different from those in coords_to_avoid
            x = coords_to_avoid[0]
            while abs(x - coords_to_avoid[0]) < 0.2:
               # x = round(max_eccen * random.uniform(-1, 1), 1)
                x = round(max_eccen * random.uniform(-1, 1) * 4, 0) / 4 # does this work?, YES
            y = coords_to_avoid[1]
            while abs(y - coords_to_avoid[1]) < 0.2:
                y = round(max_eccen * random.uniform(-1, 1), 1)
            coord = (x,y)
            return coord
      Begin Experiment:
        # Set path parameters
        path_length = 5
        pause_duration = 0.6 # in seconds
        retention_interval = 3.0 # 1000 ms

        # Movement speed (adjust for smoothness)
        #step_size = 0.01 # speeding up for debugging
        step_size = 0.03

        # colors
        #white = [1,1,1]
        #gray = [0,0,0]
        disc_color = [1,1,1]
      Begin Routine:
        # Get locations for this trial
        path_coords = []
        ## path coords is a list of (x,y) tuples
        for segment in range(path_length):
            if segment == 0:
                segment_coord = (0,0)
            else:
                segment_coord = get_random_path_coord(path_coords[segment-1])

            path_coords.append(segment_coord)
        #print(path_coords)

        # Initialize path steps
        segment = 0

        # set initial disc position
        disc_position = path_coords[segment]
        #disc_color = white
        disc_alpha = 1
        path_end = path_coords[segment + 1]

        # start pause timer
        pause_timer = core.CountdownTimer(pause_duration)

        # add data to output
        thisExp.addData('path_coords', path_coords)
      Each Frame:
        if pause_timer.getTime() <= 0 and segment < path_length - 1:
            path_end = path_coords[segment + 1]
            # get euclidean distance
            dx = path_end[0] - disc_position[0]
            dy = path_end[1] - disc_position[1]

            distance = (dx**2 + dy**2) ** 0.5
            if distance > step_size:
                # move a small step toward the target
                new_x = disc_position[0] + dx * ( step_size / distance )
                new_y = disc_position[1] + dy * ( step_size / distance )
                if memory_type == "continuous":
                    #disc_color = white
                    disc_alpha = 1
                else:
                    #disc_color = gray
                    disc_alpha = 0
            else:
                # we've reached the target, snap to position and update segment counter
                new_x = path_end[0]
                new_y = path_end[1]
                #disc_color = white
                disc_alpha = 1
                # start pause timer
                pause_timer = core.CountdownTimer(pause_duration)
                segment = segment + 1
            disc_position = (new_x, new_y)
        elif segment >= path_length - 1 and pause_timer.getTime() <= 0:
            #disc_color = gray
            disc_alpha = 0
            continueRoutine = False  # reached last point
    PolygonComponent mem_disc
      fillColor [set every frame] = $disc_alpha
      lineColor [set every frame] = $disc_alpha
      opacity [set every frame] = disc_alpha
      pos [set every frame] = disc_position
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mem_fix
      fillColor = white
      lineColor = gray
      lineWidth = 2
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine retention
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    PolygonComponent retention_fix
      fillColor = white
      lineColor = gray
      lineWidth = 2
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $retention_interval
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  Routine VWM_memory_probe
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    CodeComponent probe_sequence_code
      Code Type = Py
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      Begin Routine:
        # Get locations for this trial

        # by default, we reprise the prior coords
        path_coords_probe = path_coords.copy() # PYTHON VARIABLES ARE DUMB
        probe_length = path_length # Int, don't need to copy.

        #print(trials.thisN)
        print(memory_type)
        print(probe_type)
        print(probe_validity)
        #print(path_coords)

        if probe_validity == "lure":
            if probe_type == "sequence":
                print('generating a sequence lure')
                # pick a position
                lure_pos = int(round(random.uniform(1, path_length - 1),0))
                #print(probe_length)
                # swap with prior
                path_coords_probe[lure_pos] = path_coords[lure_pos - 1]
        #        print('path_cords_probe first swap')
        #        print(path_coords_probe)
                path_coords_probe[lure_pos - 1] = path_coords[lure_pos]
        #        print('path_coords_probe second swap')
        #        print(path_coords_probe)

            elif probe_type == "single":
                print('generating a single lure')
                probe_length = 1
                # generate a lure location
                x = round(max_eccen * random.uniform(-1, 1), 1)
                y = round(max_eccen * random.uniform(-1, 1), 1)
                lure_coords = (x,y)
                a = 1
                while a:
                    # check against memory set
                    i = 0
                    for loc in path_coords:
                        x_distance = abs(loc[0] - lure_coords[0])
                        y_distance = abs(loc[1] - lure_coords[1])
                        if x_distance < 0.2 and y_distance < 0.2:
                            x = round(max_eccen * random.uniform(-1, 1), 1)
                            y = round(max_eccen * random.uniform(-1, 1), 1)
                            lure_coords = (x,y)
                            break
        #                else:
        #                    print(loc)
        #                    print(x_distance)
        #                    print(y_distance)
                        a = 0
                path_coords_probe = [lure_coords]

        else: # probe_validity == target
            if probe_type == "single":
                print('generating a single target')
                probe_pos = int(round(random.uniform(1, path_length-1),0))
                path_coords_probe = [path_coords_probe[probe_pos]]
                probe_length = 1
        #    else: # probe_type == "discrete"
        #        return

        #print(path_coords)
        #print(path_coords_probe)

        # Initialize path steps
        segment = 0

        # set initial disc position
        disc_position = path_coords_probe[segment]
        #print(disc_position)
        #disc_color = white
        disc_alpha = 1

        # start pause timer
        pause_timer = core.CountdownTimer(pause_duration)

        if probe_type == "sequence":
            # set initial endpoint
            path_end = path_coords_probe[segment + 1]

        if probe_type == "sequence":
            response_string = "F same                           J different"
        else:
            response_string = "F old                                  J new"

            # add data to output
        thisExp.addData('path_coords_probe', path_coords_probe)
      Each Frame:
        if pause_timer.getTime() <= 0 and probe_type == "sequence" and segment < probe_length - 1:
            path_end = path_coords[segment + 1]
            # get euclidean distance
            dx = path_end[0] - disc_position[0]
            dy = path_end[1] - disc_position[1]

            distance = (dx**2 + dy**2) ** 0.5
            if distance > step_size:
                # move a small step toward the target
                new_x = disc_position[0] + dx * ( step_size / distance )
                new_y = disc_position[1] + dy * ( step_size / distance )
                if memory_type == "continuous":
                    #disc_color = white
                    disc_alpha = 1
                else:
                    #disc_color = gray
                    disc_alpha = 0
            else:
                # we've reached the target, snap to position and update segment counter
                new_x = path_end[0]
                new_y = path_end[1]
                #disc_color = white
                disc_alpha = 1
                # start pause timer
                pause_timer = core.CountdownTimer(pause_duration)
                segment = segment + 1
            disc_position = (new_x, new_y)
        elif segment >= probe_length - 1 and pause_timer.getTime() <= 0:
            #disc_color = gray
            disc_alpha = 0
            continueRoutine = False  # reached last point
    PolygonComponent probe_disc
      fillColor [set every frame] = $disc_color
      lineColor [set every frame] = $disc_color
      pos [set every frame] = disc_position
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent probe_fix
      fillColor = white
      lineColor = gray
      lineWidth = 2
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine VWM_response
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    TextComponent response_cue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ?
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    TextComponent response_instructions
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $response_string
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    KeyboardComponent key_resp_VWM
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = 1
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    PolygonComponent ITI_fix
      fillColor = white
      lineColor = gray
      lineWidth = 2
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine single_probe_instructions
    RoutineSettingsComponent single_probe_instructions
      color = 0.0000, 0.0000, 0.0000
      useWindowParams = True
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    TextComponent text_single_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will remember the locations of a disc. On some trials, the disc will move from place to place, pausing at each corner. On other trials, the disc will "jump" to different locations.

        After the disc returns to the cross, there will be a brief pause, and then the disc will appear at a single location. Your task is to determine whether that location is one of you've seen the disc at before (press "F") or is different (press "J").

        Press space to continue to this part of the experiment.
    KeyboardComponent key_resp_single_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine sequence_probe_instructions
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    TextComponent text_seq_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will remember the locations of a disc. On some trials, the disc will move from place to place, pausing at each corner. On other trials, the disc will appear at individual locations, but you will not see it move.

        After the series of locations, there will be a brief pause, and then the disc will move again. Your task is to determine whether sequence of locations is the same as previously (press "F") or is different (press "J").

        Press space to continue to this part of the experiment.
    KeyboardComponent key_resp_seq_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine thank_you
    RoutineSettingsComponent thank_you
      useWindowParams = True
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    TextComponent ty
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The experiment is now complete.


        Thank you for your participation!
Flow
  Routine single_probe_instructions
  Routine ITI
  LoopInitiator trials_single_probe loopType="TrialHandler"
    conditionsFile = experiment_control_files/trial-types_single-probe_2025-12-09.csv
    loopType = fullRandom
    nReps = 10
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'single'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'single'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'single'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'single'), ('probe_validity', 'lure')])]
    Routine VWM_memory_display
    Routine retention
    Routine VWM_memory_probe
    Routine VWM_response
    Routine ITI
  LoopTerminator trials_single_probe
  Routine sequence_probe_instructions
  Routine ITI
  LoopInitiator trials_sequence_probe loopType="TrialHandler"
    conditionsFile = experiment_control_files/trial-types_sequence-probe_2025-12-09.csv
    loopType = fullRandom
    nReps = 10
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'sequence'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'sequence'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'sequence'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'sequence'), ('probe_validity', 'lure')])]
    Routine VWM_memory_display
    Routine retention
    Routine VWM_memory_probe
    Routine VWM_response
    Routine ITI
  LoopTerminator trials_sequence_probe
  Routine thank_you
